/** Project STOLZ45
*   Present User which each of Prof Stolz COPD Lung Segmented Results
*   One at a time.
*
*   @author drTJRE.com
*   @date 22DEC2015
*/

open("/STOLZ45/S052_USB0002069243_20110419.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S081_usb0003075530_20110327.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S102_usb0003243676_20140901.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S109_usb0003152149_20140621.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S110_usb0003239810_20150716.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S122_usb0002394795_20130729.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S123_usb0002176164_20140201.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S135_usb0003209931_20110309.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S139_usb0002255402_20100727.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S142_usb0003138461_20150529.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S154_usb0002100910_20120215.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S156_usb0002214097_20110418.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S164_usb0002054182_20150630.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S175_usb0003212738_20140804.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S182_USB0003310251_20140106.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S188_usb0003035432_20120823.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S203_usb0003380046_20130115.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S213_usb0002127280_20131211.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S215_USB0002342759_20130507.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S218_usb0002052933_20130308.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S224_usb0002349377_20140930.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S240_USB0002092611_20120318.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S242_USB0003141274_20141218.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S243_USB0002094535_20111219.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S289_usb0002369017_20150106.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S296_usb0002062908_20130902.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S305_usb0003392287_20151130.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S306_usb0003034284_20150806.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S310_usb0002339130_20150611.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S318_USB0002381203_20150322.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S322_usb0003167953_20110919.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S325_USB0003459065_20140212.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S328_usb0002240466_20140508.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S340_usb0003016250_20150316.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S341_usb0002067497_20150107.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S344_USB0002224788_20121014.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S347_USB0003314052_20150218.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S354_usb0003236645_20131007.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S357_usb0003110656_20131127.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S370_usb0002197577_20140113.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/S373_usb0003463993_20150723.lung.tif");; waitForUser("Next");run("Close All");
open("/STOLZ45/SXXX_usb0002345103_20120702.lung.tif");; waitForUser("Next");run("Close All");
