/** Project STOLZ45
*   Batch load all cases and pre-selected lung seed ROI's
*   and perform segmentation.
*
*   @author drTJRE.com
*   @date 23DEC2015
*/

open("/STOLZ45/pro052_USB0002069243_20110419.tif"); open("/STOLZ45/pro052_USB0002069243_20110419.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro052_USB0002069243_20110419.lung.tif"); run("Close All");
open("/STOLZ45/pro081_usb0003075530_20110327.tif"); open("/STOLZ45/pro081_usb0003075530_20110327.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro081_usb0003075530_20110327.lung.tif"); run("Close All");
open("/STOLZ45/pro102_usb0003243676_20140901.tif"); open("/STOLZ45/pro102_usb0003243676_20140901.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro102_usb0003243676_20140901.lung.tif"); run("Close All");
open("/STOLZ45/pro109_usb0003152149_20140621.tif"); open("/STOLZ45/pro109_usb0003152149_20140621.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro109_usb0003152149_20140621.lung.tif"); run("Close All");
open("/STOLZ45/pro110_usb0003239810_20150716.tif"); open("/STOLZ45/pro110_usb0003239810_20150716.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro110_usb0003239810_20150716.lung.tif"); run("Close All");
open("/STOLZ45/pro122_usb0002394795_20130729.tif"); open("/STOLZ45/pro122_usb0002394795_20130729.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro122_usb0002394795_20130729.lung.tif"); run("Close All");
open("/STOLZ45/pro123_usb0002176164_20140201.tif"); open("/STOLZ45/pro123_usb0002176164_20140201.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro123_usb0002176164_20140201.lung.tif"); run("Close All");
open("/STOLZ45/pro135_usb0003209931_20110309.tif"); open("/STOLZ45/pro135_usb0003209931_20110309.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro135_usb0003209931_20110309.lung.tif"); run("Close All");
open("/STOLZ45/pro139_usb0002255402_20100727.tif"); open("/STOLZ45/pro139_usb0002255402_20100727.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro139_usb0002255402_20100727.lung.tif"); run("Close All");
open("/STOLZ45/pro142_usb0003138461_20150529.tif"); open("/STOLZ45/pro142_usb0003138461_20150529.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro142_usb0003138461_20150529.lung.tif"); run("Close All");
open("/STOLZ45/pro154_usb0002100910_20120215.tif"); open("/STOLZ45/pro154_usb0002100910_20120215.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro154_usb0002100910_20120215.lung.tif"); run("Close All");
open("/STOLZ45/pro156_usb0002214097_20110418.tif"); open("/STOLZ45/pro156_usb0002214097_20110418.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro156_usb0002214097_20110418.lung.tif"); run("Close All");
open("/STOLZ45/pro164_usb0002054182_20150630.tif"); open("/STOLZ45/pro164_usb0002054182_20150630.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro164_usb0002054182_20150630.lung.tif"); run("Close All");
open("/STOLZ45/pro175_usb0003212738_20140804.tif"); open("/STOLZ45/pro175_usb0003212738_20140804.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro175_usb0003212738_20140804.lung.tif"); run("Close All");
open("/STOLZ45/pro182_USB0003310251_20140106.tif"); open("/STOLZ45/pro182_USB0003310251_20140106.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro182_USB0003310251_20140106.lung.tif"); run("Close All");
open("/STOLZ45/pro188_usb0003035432_20120823.tif"); open("/STOLZ45/pro188_usb0003035432_20120823.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro188_usb0003035432_20120823.lung.tif"); run("Close All");
open("/STOLZ45/pro203_usb0003380046_20130115.tif"); open("/STOLZ45/pro203_usb0003380046_20130115.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro203_usb0003380046_20130115.lung.tif"); run("Close All");
open("/STOLZ45/pro213_usb0002127280_20131211.tif"); open("/STOLZ45/pro213_usb0002127280_20131211.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro213_usb0002127280_20131211.lung.tif"); run("Close All");
open("/STOLZ45/pro215_USB0002342759_20130507.tif"); open("/STOLZ45/pro215_USB0002342759_20130507.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro215_USB0002342759_20130507.lung.tif"); run("Close All");
open("/STOLZ45/pro218_usb0002052933_20130308.tif"); open("/STOLZ45/pro218_usb0002052933_20130308.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro218_usb0002052933_20130308.lung.tif"); run("Close All");
open("/STOLZ45/pro224_usb0002349377_20140930.tif"); open("/STOLZ45/pro224_usb0002349377_20140930.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro224_usb0002349377_20140930.lung.tif"); run("Close All");
open("/STOLZ45/pro240_USB0002092611_20120318.tif"); open("/STOLZ45/pro240_USB0002092611_20120318.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro240_USB0002092611_20120318.lung.tif"); run("Close All");
open("/STOLZ45/pro242_USB0003141274_20141218.tif"); open("/STOLZ45/pro242_USB0003141274_20141218.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro242_USB0003141274_20141218.lung.tif"); run("Close All");
open("/STOLZ45/pro243_USB0002094535_20111219.tif"); open("/STOLZ45/pro243_USB0002094535_20111219.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro243_USB0002094535_20111219.lung.tif"); run("Close All");
open("/STOLZ45/pro258_usb0002392897_20120619.tif"); open("/STOLZ45/pro258_usb0002392897_20120619.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro258_usb0002392897_20120619.lung.tif"); run("Close All");
open("/STOLZ45/pro289_usb0002369017_20150106.tif"); open("/STOLZ45/pro289_usb0002369017_20150106.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro289_usb0002369017_20150106.lung.tif"); run("Close All");
open("/STOLZ45/pro296_usb0002062908_20130902.tif"); open("/STOLZ45/pro296_usb0002062908_20130902.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro296_usb0002062908_20130902.lung.tif"); run("Close All");
open("/STOLZ45/pro305_usb0003392287_20151130.tif"); open("/STOLZ45/pro305_usb0003392287_20151130.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro305_usb0003392287_20151130.lung.tif"); run("Close All");
open("/STOLZ45/pro306_usb0003034284_20150806.tif"); open("/STOLZ45/pro306_usb0003034284_20150806.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro306_usb0003034284_20150806.lung.tif"); run("Close All");
open("/STOLZ45/pro310_usb0002339130_20150611.tif"); open("/STOLZ45/pro310_usb0002339130_20150611.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro310_usb0002339130_20150611.lung.tif"); run("Close All");
open("/STOLZ45/pro318_USB0002381203_20150322.tif"); open("/STOLZ45/pro318_USB0002381203_20150322.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro318_USB0002381203_20150322.lung.tif"); run("Close All");
open("/STOLZ45/pro322_usb0003167953_20110919.tif"); open("/STOLZ45/pro322_usb0003167953_20110919.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro322_usb0003167953_20110919.lung.tif"); run("Close All");
open("/STOLZ45/pro325_USB0003459065_20140212.tif"); open("/STOLZ45/pro325_USB0003459065_20140212.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro325_USB0003459065_20140212.lung.tif"); run("Close All");
open("/STOLZ45/pro328_usb0002240466_20140508.tif"); open("/STOLZ45/pro328_usb0002240466_20140508.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro328_usb0002240466_20140508.lung.tif"); run("Close All");
// open("/STOLZ45/pro338_usb0002158853_20151016.tif"); open("/STOLZ45/pro338_usb0002158853_20151016.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro338_usb0002158853_20151016.lung.tif"); run("Close All");
open("/STOLZ45/pro340_usb0003016250_20150316.tif"); open("/STOLZ45/pro340_usb0003016250_20150316.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro340_usb0003016250_20150316.lung.tif"); run("Close All");
open("/STOLZ45/pro341_usb0002067497_20150107.tif"); open("/STOLZ45/pro341_usb0002067497_20150107.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro341_usb0002067497_20150107.lung.tif"); run("Close All");
open("/STOLZ45/pro344_USB0002224788_20121014.tif"); open("/STOLZ45/pro344_USB0002224788_20121014.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro344_USB0002224788_20121014.lung.tif"); run("Close All");
open("/STOLZ45/pro347_USB0003314052_20150218.tif"); open("/STOLZ45/pro347_USB0003314052_20150218.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro347_USB0003314052_20150218.lung.tif"); run("Close All");
open("/STOLZ45/pro354_usb0003236645_20131007.tif"); open("/STOLZ45/pro354_usb0003236645_20131007.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro354_usb0003236645_20131007.lung.tif"); run("Close All");
open("/STOLZ45/pro357_usb0003110656_20131127.tif"); open("/STOLZ45/pro357_usb0003110656_20131127.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro357_usb0003110656_20131127.lung.tif"); run("Close All");
open("/STOLZ45/pro370_usb0002197577_20140113.tif"); open("/STOLZ45/pro370_usb0002197577_20140113.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro370_usb0002197577_20140113.lung.tif"); run("Close All");
open("/STOLZ45/pro373_usb0003463993_20150723.tif"); open("/STOLZ45/pro373_usb0003463993_20150723.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/pro373_usb0003463993_20150723.lung.tif"); run("Close All");
open("/STOLZ45/proXXX_usb0002345103_20120702.tif"); open("/STOLZ45/proXXX_usb0002345103_20120702.tif.roi"); run("USB SemiAutoLungSegmentTJ"); saveAs("Tiff", "/STOLZ45/proXXX_usb0002345103_20120702.lung.tif"); run("Close All");
