/** Project STOLZ45
*   Present User which each of Prof Stolz COPD Lung Segmented Results
*   One at a time.
*
*   @author drTJRE.com
*   @date 22DEC2015
*/

open("/STOLZ45/s052_USB0002069243_20110419.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S052_USB0002069243_20110419.lung.tif");run("Close All");
open("/STOLZ45/s081_usb0003075530_20110327.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S081_usb0003075530_20110327.lung.tif");run("Close All");
open("/STOLZ45/s102_usb0003243676_20140901.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S102_usb0003243676_20140901.lung.tif");run("Close All");
open("/STOLZ45/s109_usb0003152149_20140621.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S109_usb0003152149_20140621.lung.tif");run("Close All");
open("/STOLZ45/s110_usb0003239810_20150716.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S110_usb0003239810_20150716.lung.tif");run("Close All");
open("/STOLZ45/s122_usb0002394795_20130729.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S122_usb0002394795_20130729.lung.tif");run("Close All");
open("/STOLZ45/s123_usb0002176164_20140201.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S123_usb0002176164_20140201.lung.tif");run("Close All");
open("/STOLZ45/s135_usb0003209931_20110309.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S135_usb0003209931_20110309.lung.tif");run("Close All");
open("/STOLZ45/s139_usb0002255402_20100727.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S139_usb0002255402_20100727.lung.tif");run("Close All");
open("/STOLZ45/s142_usb0003138461_20150529.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S142_usb0003138461_20150529.lung.tif");run("Close All");
open("/STOLZ45/s154_usb0002100910_20120215.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S154_usb0002100910_20120215.lung.tif");run("Close All");
open("/STOLZ45/s156_usb0002214097_20110418.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S156_usb0002214097_20110418.lung.tif");run("Close All");
open("/STOLZ45/s164_usb0002054182_20150630.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S164_usb0002054182_20150630.lung.tif");run("Close All");
open("/STOLZ45/s175_usb0003212738_20140804.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S175_usb0003212738_20140804.lung.tif");run("Close All");
open("/STOLZ45/s182_USB0003310251_20140106.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S182_USB0003310251_20140106.lung.tif");run("Close All");
open("/STOLZ45/s188_usb0003035432_20120823.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S188_usb0003035432_20120823.lung.tif");run("Close All");
open("/STOLZ45/s203_usb0003380046_20130115.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S203_usb0003380046_20130115.lung.tif");run("Close All");
open("/STOLZ45/s213_usb0002127280_20131211.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S213_usb0002127280_20131211.lung.tif");run("Close All");
open("/STOLZ45/s215_USB0002342759_20130507.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S215_USB0002342759_20130507.lung.tif");run("Close All");
open("/STOLZ45/s218_usb0002052933_20130308.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S218_usb0002052933_20130308.lung.tif");run("Close All");
open("/STOLZ45/s224_usb0002349377_20140930.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S224_usb0002349377_20140930.lung.tif");run("Close All");
open("/STOLZ45/s240_USB0002092611_20120318.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S240_USB0002092611_20120318.lung.tif");run("Close All");
open("/STOLZ45/s242_USB0003141274_20141218.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S242_USB0003141274_20141218.lung.tif");run("Close All");
open("/STOLZ45/s243_USB0002094535_20111219.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S243_USB0002094535_20111219.lung.tif");run("Close All");
open("/STOLZ45/s289_usb0002369017_20150106.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S289_usb0002369017_20150106.lung.tif");run("Close All");
open("/STOLZ45/s296_usb0002062908_20130902.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S296_usb0002062908_20130902.lung.tif");run("Close All");
open("/STOLZ45/s305_usb0003392287_20151130.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S305_usb0003392287_20151130.lung.tif");run("Close All");
open("/STOLZ45/s306_usb0003034284_20150806.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S306_usb0003034284_20150806.lung.tif");run("Close All");
open("/STOLZ45/s310_usb0002339130_20150611.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S310_usb0002339130_20150611.lung.tif");run("Close All");
open("/STOLZ45/s318_USB0002381203_20150322.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S318_USB0002381203_20150322.lung.tif");run("Close All");
open("/STOLZ45/s322_usb0003167953_20110919.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S322_usb0003167953_20110919.lung.tif");run("Close All");
open("/STOLZ45/s325_USB0003459065_20140212.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S325_USB0003459065_20140212.lung.tif");run("Close All");
open("/STOLZ45/s328_usb0002240466_20140508.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S328_usb0002240466_20140508.lung.tif");run("Close All");
open("/STOLZ45/s340_usb0003016250_20150316.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S340_usb0003016250_20150316.lung.tif");run("Close All");
open("/STOLZ45/s341_usb0002067497_20150107.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S341_usb0002067497_20150107.lung.tif");run("Close All");
open("/STOLZ45/s344_USB0002224788_20121014.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S344_USB0002224788_20121014.lung.tif");run("Close All");
open("/STOLZ45/s347_USB0003314052_20150218.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S347_USB0003314052_20150218.lung.tif");run("Close All");
open("/STOLZ45/s354_usb0003236645_20131007.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S354_usb0003236645_20131007.lung.tif");run("Close All");
open("/STOLZ45/s357_usb0003110656_20131127.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S357_usb0003110656_20131127.lung.tif");run("Close All");
open("/STOLZ45/s370_usb0002197577_20140113.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S370_usb0002197577_20140113.lung.tif");run("Close All");
open("/STOLZ45/s373_usb0003463993_20150723.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/S373_usb0003463993_20150723.lung.tif");run("Close All");
open("/STOLZ45/sXXX_usb0002345103_20120702.lung.tif");run("Substitute Mask");saveAs("Tiff", "/STOLZ45/SXXX_usb0002345103_20120702.lung.tif");run("Close All");
